PsychoPy2experiment version="3.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = hebrew
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Routines
  Routine trial
    ImageComponent image_1
      image [set every repeat] = $images
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    MicrophoneComponent mic_1
      channel = 0
      startVal [time (s)] = 0.0
      stereo = False
      stopVal [duration (s)] = 2.0
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  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = What color are the following words? Please read the words in Hebrew in a loud voice and say the color in Hebrew in a loud voice too. Press any key to start
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = Lets practice two times and then start. Press any key to start
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  Routine goodbye
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        Thanks for your participation
Flow
  Routine instructions
  Routine practice
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('images', 'images/majberet.png')]),
      OrderedDict([('images', 'images/verde.png')]),
      OrderedDict([('images', 'images/majberot.png')]),
      OrderedDict([('images', 'images/blue.png')]),
      OrderedDict([('images', 'images/derej.png')]),
      OrderedDict([('images', 'images/red.png')]),
      OrderedDict([('images', 'images/ir.png')]),
      OrderedDict([('images', 'images/black.png')]),
      OrderedDict([('images', 'images/naal.png')]),
      OrderedDict([('images', 'images/white.png')]),
      OrderedDict([('images', 'images/reguel.png')]),
      OrderedDict([('images', 'images/yellow.png')]),
      OrderedDict([('images', 'images/kikar.png')]),
      OrderedDict([('images', 'images/black.png')]),
      OrderedDict([('images', 'images/arim.png')]),
      OrderedDict([('images', 'images/black.png')]),
      OrderedDict([('images', 'images/drajim.png')]),
      OrderedDict([('images', 'images/red.png')]),
      OrderedDict([('images', 'images/naalaim.png')]),
      OrderedDict([('images', 'images/white.png')]),
      OrderedDict([('images', 'images/ugattapujim.png')]),
      OrderedDict([('images', 'images/red.png')]),
      OrderedDict([('images', 'images/abanim.png')]),
      OrderedDict([('images', 'images/black.png')]),
      OrderedDict([('images', 'images/armonjol.png')]),
      OrderedDict([('images', 'images/white.png')]),
      OrderedDict([('images', 'images/arujatboker.png')]),
      OrderedDict([('images', 'images/yellow.png')]),
      OrderedDict([('images', 'images/arujatzeirim.png')]),
      OrderedDict([('images', 'images/black.png')]),
      OrderedDict([('images', 'images/beitkbarot.png')]),
      OrderedDict([('images', 'images/white.png')])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
    Routine trial
  LoopTerminator trials
  Routine goodbye
